<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <reader>
        <slot>1008</slot>
        <dll>gadgetron_mricore</dll>
        <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
    </reader>
    <reader>
        <slot>1026</slot>
        <dll>gadgetron_mricore</dll>
        <classname>GadgetIsmrmrdWaveformMessageReader</classname>
    </reader>

    <writer>
      <slot>1022</slot>
      <dll>gadgetron_mricore</dll>
      <classname>MRIImageWriter</classname>
    </writer>
    
    <gadget>
      <name>ReconX</name>
      <!-- <dll>gadgetron_epi</dll> -->
      <dll>gadgetron_mri_epi</dll>
      <classname>EPIReconXGadget</classname>
    </gadget>

    <gadget>
      <name>EPICorr</name>
      <!-- <dll>gadgetron_epi</dll> -->
      <dll>gadgetron_epi</dll>      
      <classname>EPICorrGadget</classname>
    </gadget>

    <!-- FFT in X back to k -->
    <gadget>
        <name>FFTX</name>
        <dll>gadgetron_epi</dll>
        <classname>FFTXGadget</classname>
    </gadget>


    <gadget>
        <name>AccTrig</name>
        <dll>gadgetron_mricore</dll>
        <classname>AcquisitionAccumulateTriggerGadget</classname>
        <property>
            <name>trigger_dimension</name>
            <value>repetition</value>
        </property>
        <property>
          <name>sorting_dimension</name>
          <value>slice</value>
        </property>
    </gadget>

    <gadget>
        <name>Buff</name>
        <dll>gadgetron_mricore</dll>
        <classname>BucketToBufferGadget</classname>
        <property>
            <name>N_dimension</name>
            <value></value>
        </property>
        <property>
          <name>S_dimension</name>
          <value></value>
        </property>
        <property>
          <name>split_slices</name>
          <value>true</value>
        </property>
        <property>
          <name>ignore_segment</name>
          <value>true</value>
        </property>
    </gadget>
    
    
<!--
    <gadget>
      <name>IsmrmrdDump</name>
      <dll>gadgetron_mricore</dll>
      <classname>IsmrmrdDumpGadget</classname>
      <property><name>file_prefix</name><value>ISMRMRD_DUMP</value></property>
      <property><name>append_timestamp</name><value>1</value></property>
    </gadget>
-->


    <!-- We are here! -->

    <gadget>
      <name>FFT</name>
      <dll>gadgetron_mricore</dll>
      <classname>FFTGadget</classname>
    </gadget>
    
    <gadget>
      <name>Combine</name>
      <dll>gadgetron_mricore</dll>
      <classname>CombineGadget</classname>
    </gadget>

    <gadget>
      <name>Extract</name>
      <dll>gadgetron_mricore</dll>
      <classname>ExtractGadget</classname>
    </gadget>  

   <gadget>
      <name>AutoScale</name>
      <dll>gadgetron_mricore</dll>
      <classname>AutoScaleGadget</classname>
    </gadget>

    <gadget>
      <name>FloatToShort</name>
      <dll>gadgetron_mricore</dll>
      <classname>FloatToUShortGadget</classname>
    </gadget>
 
     <gadget>
      <name>ImageFinish</name>
      <dll>gadgetron_mricore</dll>
      <classname>ImageFinishGadget</classname>
    </gadget>
</gadgetronStreamConfiguration>
